CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "001.tif")
    Name to assign these images:Nuclei_images
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nuclei_images
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|D:\\AL\\Salman_Cell_profiler_data\\results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Nuclei,Image|FileName_Nuclei_images,Image|PathName_Nuclei_images,Nuclei|Number_Object_Number,Nuclei|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Nuclei_count_
    Overwrite existing files without warning?:Yes
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